PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '1000', 'session': '001', 'condition': '7'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = degFlatPos
  Window size (pixels) = [1920, 1080]
  color = black
  expName = task-switching-replication
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Routines
  Routine practiceTimedTrial
    ImageComponent practiceTimedTaskCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent practiceTimedTaskTargetImage
      image [set every repeat] = $targetFileName
      size = (5.0, 5.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent practiceTimedTaskResponse
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine practiceTimedInstructions
    TextComponent practiceTimedInstructionText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Respond to the cue.

        Practice Trials.  For these practice trials
        you will have a time limit to respond.
        You must respond within 1.5 seconds
        to the stimulus.

         We will  now practice the task
        so you can learn how to respond
        within the time limit correctly.
        For this task you will first
        see a cue, a dashed box or a solid box.
        You must respond to the shape or
        color within 1.5 seconds.

        For a dashed box, respond to the color.
        left for yellow, right for blue

        For a solid box, respond to the shape.
        left for triangle, right for square.

        Remember:
        dashed: left yellow right blue
        solid: left triangle, right square

        Press any key to begin practicing experiment.
    KeyboardComponent practiceTimedKeyResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedTrial
    ImageComponent practiceUntimedTaskCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
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    ImageComponent practiceUntimedTaskTargetImage
      image [set every repeat] = $targetFileName
      size = (5.0, 5.0)
      startVal [time (s)] = 1.0
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    KeyboardComponent practiceUntimedTaskResponse
      allowedKeys = '1', '2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine practiceUntimedFeedbackSelect
    CodeComponent practiceUntimedFeedbackCode
      Code Type = Py
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrect = 0
      Begin Routine:
        if taskResponse.corr == 1:
            selectCorrect = 1
            selectIncorrect = 0
        else:
            selectCorrect = 0
            selectIncorrect = 1
  Routine practiceUntimedCorrectFeedback
  Routine practiceDelay
    TextComponent delayText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine practiceUntimedInstructionsOrig
    TextComponent practiceUntimedInstructionText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      wrapWidth = 25.0
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      text:
        Respond to the cue.

        Practice Trials. Take as much
        time as you need to learn and
        respond to the task.

         We will first  practice the task untimed
        so you can learn how to respond correctly.

        For this task you will first
        see a cue, a dashed box or a solid box.
        You must respond to the shape or
        color depending on the box.

        For a dashed box, respond to the color.
        left for yellow, right for blue

        For a solid box, respond to the shape.
        left for triangle, right for square.

        Remember:
        dashed: left yellow right blue
        solid: left triangle, right square

        Press any key to begin practicing experiment.
    KeyboardComponent practiceUntimedKeyResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions01
    CodeComponent practiceUntimedInstructionsConfiguration
      Code Type = Auto->JS
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      Begin Experiment:
        # set up instruction and experiment image file names for loading
        condition = expInfo['condition']
        untimed01InstructionImage = 'instructions/cond-%02d-untimed-01.png' % (int(condition))
        untimed02InstructionImage = 'instructions/cond-%02d-untimed-02.png' % (int(condition))
        untimed03InstructionImage = 'instructions/cond-%02d-untimed-03.png' % (int(condition))
        untimed04InstructionImage = 'instructions/cond-%02d-untimed-04.png' % (int(condition))
        untimed05InstructionImage = 'instructions/cond-%02d-untimed-05.png' % (int(condition))
        untimed06InstructionImage = 'instructions/cond-%02d-untimed-06.png' % (int(condition))
        untimed07InstructionImage = 'instructions/cond-%02d-untimed-07.png' % (int(condition))
        untimed08InstructionImage = 'instructions/cond-%02d-untimed-08.png' % (int(condition))

        timed01InstructionImage = 'instructions/cond-%02d-timed-01.png' % (int(condition))
        timed02InstructionImage = 'instructions/cond-%02d-timed-02.png' % (int(condition))

        experiment01InstructionImage = 'instructions/cond-%02d-experiment-01.png' % (int(condition))

        errorDashedImage = 'instructions/cond-%02d-error-dashed.png' % (int(condition))
        errorSolidImage = 'instructions/cond-%02d-error-solid.png' % (int(condition))

        # experimental condition variables
        posture = 'standing'
        cueSolid = 'shape'
        cueDashed = 'color'
        colorLeft = 'yellow'
        colorRight = 'blue'
        shapeLeft = 'triangle'
        shapeRight = 'square'
    ImageComponent practiceUntimedInstruction01Text
      image = $untimed01InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions01KeyResponse
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions02
    ImageComponent image
      image = $untimed02InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimed02KeyResponse
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions03
    ImageComponent practiceUntimedInstructions03Image
      image = $untimed03InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions03KeyResponse
      allowedKeys [set every repeat] = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions04
    ImageComponent practiceUntimedInstructions04Image
      image = $untimed04InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions04KeyResponse
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions05
    ImageComponent practiceUntimedInstructions05Image
      image = $untimed05InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions05KeyResponse
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions06
    ImageComponent practiceUntimedInstructions06Image
      image = $untimed06InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions06KeyResponse
      allowedKeys [set every repeat] = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions07
    ImageComponent practiceUntimedInstructions07Image
      image = $untimed07InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions07KeyResponse
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceUntimedInstructions08
    ImageComponent practiceUntimedInstructions08Image
      image = $untimed08InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceUntimedInstructions08KeyResponse
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceIncorrectSolidFeedback
    SoundComponent feedbackSound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent feedbackSolidIncorrectImage
      image = $errorSolidImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine practiceIncorrectDashFeedback
    SoundComponent practiceIncorrectDashedSound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent practiceIncorrectDashedFeedbackImage
      image = $errorDashedImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine practiceTimedInstructions01
    ImageComponent practiceTimedInstructions01Image
      image = $timed01InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceTimedInstructions01KeyResponse
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceTimedInstructions02
    ImageComponent practiceTimedInstructions02Image
      image = $timed02InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceTimedInstructions02KeyResponse
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceCorrectFeedback
    TextComponent practiceTimedFeedbackMessageCorrect
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = That was correct!
      wrapWidth = 25
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  Routine practiceTimedFeedbackSelect
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if practiceTimedTaskResponse.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine practiceUntimedFeedbackSelect_2
    CodeComponent practiceTimedFeedbackCustomCode
      Code Type = Py
      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if practiceUntimedTaskResponse.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine experimentInstructions01
    ImageComponent experimentInstructions01Image
      image = $experiment01InstructionImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent experimentInstructions01KeyResponse
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experimentTimedTrial
    ImageComponent expCueImage
      image [set every repeat] = $cueFileName
      size = (10.0, 10.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent expTargetImage
      image [set every repeat] = $targetFileName
      size = (5.0, 5.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent expResponse
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine experimentFeedbackSelect
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if expResponse.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine experimentIncorrectSolidFeedback
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image = $errorSolidImage
      size = (53, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine experimentIncorrectDashedFeedback
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = $errorDashedImage
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine experimentDelay
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine experimentBlockInstructions
    TextComponent text_2
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockText
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockSetup
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 1
        blockText = ""
      Begin Routine:
        blockText = """
        Please check your posture and ensure you
        are still in the correct position.


        This is block %d of 8 blocks



        Press any button to start the challenge""" % (blockNumber)

        blockNumber += 1
Flow
  Routine practiceUntimedInstructions01
  Routine practiceUntimedInstructions02
  Routine practiceUntimedInstructions03
  Routine practiceUntimedInstructions04
  Routine practiceUntimedInstructions05
  Routine practiceUntimedInstructions06
  Routine practiceUntimedInstructions07
  Routine practiceUntimedInstructions08
  LoopInitiator practiceUntimedTrials loopType="TrialHandler"
    conditionsFile = task-switching-replication-trialtypes.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 2},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 1},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 1},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 2},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2}]
    Routine practiceUntimedTrial
    Routine practiceUntimedFeedbackSelect_2
    LoopInitiator practiceCorrectConditionSelect loopType="TrialHandler"
      loopType = random
      nReps = selectCorrect
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      Routine practiceCorrectFeedback
    LoopTerminator practiceCorrectConditionSelect
    LoopInitiator practiceIncorrectSolidConditionSelect loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrectSolid
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      Routine practiceIncorrectSolidFeedback
    LoopTerminator practiceIncorrectSolidConditionSelect
    LoopInitiator practiceIncorrectDashedConditionSelect loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrectDashed
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      Routine practiceIncorrectDashFeedback
    LoopTerminator practiceIncorrectDashedConditionSelect
    Routine practiceDelay
  LoopTerminator practiceUntimedTrials
  Routine practiceTimedInstructions01
  Routine practiceTimedInstructions02
  LoopInitiator practiceTimedTrials loopType="TrialHandler"
    conditionsFile = task-switching-replication-trialtypes.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png'},
      {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png'},
      {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png'}]
    Routine practiceTimedTrial
    Routine practiceTimedFeedbackSelect
    LoopInitiator practiceCorrectConditionSelection loopType="TrialHandler"
      loopType = random
      nReps = selectCorrect
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      Routine practiceCorrectFeedback
    LoopTerminator practiceCorrectConditionSelection
    LoopInitiator practiceIncorrectSolidConditionSelection loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrectSolid
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      Routine practiceIncorrectSolidFeedback
    LoopTerminator practiceIncorrectSolidConditionSelection
    LoopInitiator practiceIncorrectDashedConditionSelect2 loopType="TrialHandler"
      loopType = random
      nReps = selectIncorrectDashed
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      Routine practiceIncorrectDashFeedback
    LoopTerminator practiceIncorrectDashedConditionSelect2
    Routine practiceDelay
  LoopTerminator practiceTimedTrials
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine experimentInstructions01
    Routine blockSetup
    Routine experimentBlockInstructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = task-switching-replication-trialtypes.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [{'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
        {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 2},
        {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 1},
        {'cueType': 'dashed', 'cueFileName': 'stimuli/dashed-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2},
        {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-triangle.png', 'correctAnswer': 1},
        {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'triangle', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-triangle.png', 'correctAnswer': 1},
        {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'yellow', 'targetFileName': 'stimuli/yellow-square.png', 'correctAnswer': 2},
        {'cueType': 'solid', 'cueFileName': 'stimuli/solid-rectangle.png', 'shapeType': 'square', 'shapeColor': 'blue', 'targetFileName': 'stimuli/blue-square.png', 'correctAnswer': 2}]
      Routine experimentTimedTrial
      Routine experimentFeedbackSelect
      LoopInitiator experimentIncorrectSolidSelect loopType="TrialHandler"
        loopType = random
        nReps = selectIncorrectSolid
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        Routine experimentIncorrectSolidFeedback
      LoopTerminator experimentIncorrectSolidSelect
      LoopInitiator experimentIncorrectDashedSelect loopType="TrialHandler"
        loopType = random
        nReps = selectIncorrectDashed
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        Routine experimentIncorrectDashedFeedback
      LoopTerminator experimentIncorrectDashedSelect
      Routine experimentDelay
    LoopTerminator trials
  LoopTerminator block
